CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160302210837
GitHash:1b13225
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Image_ID>.*)_01_(?P<channel>.*)_(?P<Ps_adjustment>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:2
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    Select the rule criteria:and (file does contain "700")
    Name to assign these images:Draq5Orig
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "800")
    Name to assign these images:TGM1Orig
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:///E:/surfdrive/A_PhD/Data_2017/colony_formation_assay/JvBV167_compounds_PKIS/cell_profiler_analysis/input/0011155_01_700_re-exposed.tif   
    Name to assign this image:Draq5Illum
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:///E:/surfdrive/A_PhD/Data_2017/colony_formation_assay/JvBV167_compounds_PKIS/cell_profiler_analysis/input/0011155_01_800_re-exposed.tif   
    Name to assign this image:TGM1Illum
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Image_ID

RescaleIntensity:[module_num:5|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
    Select the input image:Draq5Orig
    Name the output image:RescaledDraq5Orig
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Select the input image:TGM1Orig
    Name the output image:RescaledTGM1Orig
    Rescaling method:Stretch each image to use the full intensity range
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
Align:[module_num:7|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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
    Select the first input image:RescaledTGM1Orig
    Name the first output image:AlignedTGM1Orig
    Select the second input image:RescaledDraq5Orig
    Name the second output image:AlignedDraq5Orig
    Select the additional image:Draq5Illum
    Name the output image:AlignedDraq5Illum
    Select how the alignment is to be applied:Similarly
    Select the additional image:TGM1Illum
    Name the output image:AlignedTGM1Illum
    Select how the alignment is to be applied:Similarly

DefineGrid:[module_num:8|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
    Name the grid:Grid_plate
    Number of rows:2
    Number of columns:3
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Once
    Select the method to define the grid:Manual
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    Select the method to define the grid manually:Coordinates
    Select the image to display:RescaledDraq5Orig
    Coordinates of the first cell:264,242
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:1182,704
    Row number of the second cell:2
    Column number of the second cell:3
    Retain an image of the grid?:No
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    Select the image on which to display the grid:RescaledDraq5Orig
    Use a previous grid if gridding fails?:No

IdentifyObjectsInGrid:[module_num:9|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
    Select the defined grid:Grid_plate
    Name the objects to be identified:Grid_6wells
    Select object shapes and locations:Circle Forced Location
    Specify the circle diameter automatically?:Manual
    Circle diameter:415
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    Retain outlines of the identified objects?:No
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
MaskImage:[module_num:10|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
    Select the input image:AlignedDraq5Orig
    Name the output image:Aligned_Draq5Orig_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Grid_6wells
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    Invert the mask?:No

MaskImage:[module_num:11|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
    Select the input image:AlignedTGM1Orig
    Name the output image:AlignedTGM1Orig_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Grid_6wells
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    Invert the mask?:No

CorrectIlluminationApply:[module_num:12|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
    Select the input image:Aligned_Draq5Orig_masked
    Name the output image:Draq5Corr
    Select the illumination function:AlignedDraq5Illum
    Select how the illumination function is applied:Subtract
    Select the input image:AlignedTGM1Orig_masked
    Name the output image:TGM1Corr
    Select the illumination function:AlignedTGM1Illum
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:Draq5Corr
    Name the primary objects to be identified:ColoniesDraq5
    Typical diameter of objects, in pixel units (Min,Max):7,120
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
SaveImages:[module_num:14|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
    Select the type of image to save:Objects
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    Select the objects to save:ColoniesDraq5
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Draq5Orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_recognized_colonies
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Recognized_colonies
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Color
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
RelateObjects:[module_num:15|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
    Select the input child objects:ColoniesDraq5
    Select the input parent objects:Grid_6wells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
MaskObjects:[module_num:16|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
    Select objects to be masked:Grid_6wells
    Name the masked objects:Background
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ColoniesDraq5
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:Yes

MeasureObjectIntensity:[module_num:17|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
    Hidden:2
    Select an image to measure:Draq5Corr
    Select an image to measure:TGM1Corr
    Select objects to measure:ColoniesDraq5

MeasureObjectSizeShape:[module_num:18|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
    Select objects to measure:ColoniesDraq5
    Calculate the Zernike features?:No

DisplayDataOnImage:[module_num:19|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
    Display object or image measurements?:Object
    Select the input objects:Grid_6wells
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Draq5Orig
    Text color:blue
    Name the output image that has the measurements displayed:Well_numbering
    Font size (points):12
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:Well_numbering
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Draq5Orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_annotated_wells_draq5
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|well_annotated
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ImageMath:[module_num:21|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Draq5_inverted_bw
    Image or measurement?:Image
    Select the first image:Draq5Corr
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:22|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:TGM1_inverted_bw
    Image or measurement?:Image
    Select the first image:TGM1Corr
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:Draq5_inverted_bw
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Draq5Orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_inverted_bw
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|inverted_BW
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:TGM1_inverted_bw
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    Select method for constructing file names:From image filename
    Select image name for file prefix:TGM1Orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_inverted_bw
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|inverted_BW
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|E:\\\\\\\\surfdrive\\\\\\\\A_PhD\\\\\\\\Data_2017\\\\\\\\colony_formation_assay\\\\\\\\JvBV166_AG1478_DMHI\\\\\\\\cell_profiler_analysis\\\\\\\\output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:JvBV167_
    Overwrite existing files without warning?:No
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